PsychoPy2experiment version="2025.2.4"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['Номер участника'], expName, expInfo['date'])
  Experiment info = {'Пол (1-М, 2-Ж)': '', 'Возраст': '', 'Номер участника': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $[1.000,1.000,1.000]
  expName = attractive
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine instruction
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    TextComponent text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Добро пожаловать в эксперимент!

        В этом эксперименте вам нужно будет оценивать привлекательность лиц.

        Сначала в центре экрана появится лицо.

        После того как лицо исчезнет, в центре экрана будет показана оценка других участников.

        Зелёное число показывает, какую оценку поставило большинство других участников, а процент показывает долю участников, поставивших эту оценку.

        Вам нужно оценить лицо по шкале от 1 (очень непривлекательно) до 9 (очень привлекательно).

        Пожалуйста, старайтесь давать оценку как можно быстрее, не раздумывая слишком долго.

        Во время эксперимента постарайтесь держать взгляд направленным в центр экрана.

        Сначала мы проведём короткую тренировочную серию, чтобы показать, как будет проходить эксперимент.

        Если вы готовы, нажмите пробел, чтобы начать.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
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    TextComponent fix
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine practicepics
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    ImageComponent practiceimage
      image [set every repeat] = $pra
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine instr
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    TextComponent text_2
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        The practice section has concluded.

        If you are still unclear about what you have to do, please inform the experimenter.

        If everything is clear, please read the following:

        The work you have completed 5 minutes ago has been graded by the Academocracy AI.

        It will give you its personal and honest opinion on the work you have completed.

        You do not have to do anything with the feedback other than read it.

        After reading it, continue onto the rest of the experiment.

        If everything is clear, and you are ready to read the feedback, please press SPACEBAR.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine allpics
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    ImageComponent image
      image [set every repeat] = $target
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine practice_rating
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    TextComponent fix1
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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    KeyboardComponent practiceRating
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SliderComponent slider
      borderColor [set every repeat] = $(-1.0000, -1.0000, -1.0000)
      color [set every repeat] = $(-1.0000, -1.0000, -1.0000)
      fillColor [set every repeat] = $(-1.0000, -1.0000, -1.0000)
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = (1, 2, 3, 4, 5, 6, 7, 8, 9)
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        import numpy as np
        picked = int(np.random.choice([3, 4, 6, 7]))
      Each Frame:
        # DO NOT read slider.rating or slider.markerPos

        scaleMin = 1
        scaleMax = 9

        normPos = (picked - scaleMin) / (scaleMax - scaleMin)

        scaleWidth = slider.size[0]

        xPos = slider.pos[0] - scaleWidth/2 + normPos * scaleWidth
        yPos = slider.pos[1] - 0.11

        highlightBox.pos = (xPos, yPos)

        highlightBox.width = 0.08
        highlightBox.height = 0.10

        highlightBox.autoDraw = True
      End Routine:
        highlightBox.autoDraw = False
    TextComponent mainNum
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    TextComponent percNum
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    PolygonComponent highlightBox
      fillColor = none
      lineColor = $(-1.0000, 0.0039, -1.0000)
      lineWidth = 5
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = height
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  Routine rating
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    TextComponent fix2
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent preConformRating
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SliderComponent ratingslider
      borderColor [set every repeat] = $(-1.0000, -1.0000, -1.0000)
      color [set every repeat] = $(-1.0000, -1.0000, -1.0000)
      fillColor [set every repeat] = $(-1.0000, -1.0000, -1.0000)
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = (1, 2, 3, 4, 5, 6, 7, 8, 9)
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8 ,9)
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  Routine conform
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        # ------------------------------------------------------------
        # PsychoPy-ready code (put into a Code Component)
        # ------------------------------------------------------------

        import random
        import numpy as np

        def generate_7_sum100_one_ge60(sigma=3.0, min_other=0, big_min=60, big_max=90):
            big_index = random.randrange(7)
            big = random.randint(big_min, big_max)
            remainder = 100 - big

            if remainder == 0:
                vals = [0] * 7
                vals[big_index] = 100
                return vals, big_index

            mu = remainder / 6.0
            draws = np.random.normal(loc=mu, scale=sigma, size=6)
            draws = np.maximum(draws, min_other)

            if draws.sum() == 0:
                draws = np.ones(6)

            scaled = draws / draws.sum() * remainder
            ints = np.floor(scaled).astype(int)
            diff = remainder - ints.sum()

            frac = scaled - np.floor(scaled)
            order = np.argsort(-frac)
            for i in range(diff):
                ints[order[i]] += 1

            vals = []
            other_iter = iter(ints.tolist())
            for i in range(7):
                if i == big_index:
                    vals.append(big)
                else:
                    vals.append(next(other_iter))

            assert sum(vals) == 100
            assert max(vals) >= big_min

            return vals, big_index


        # =========================
        # Begin Experiment
        # =========================

        vals, big_i = generate_7_sum100_one_ge60(sigma=3.0)
        v1, v2, v3, v4, v5, v6, v7 = vals

        nbsp = "\u00A0"  # NON-BREAKING SPACE

        percentText = (
            f"1({v1}%)" + nbsp +
            f"2({v2}%)" + nbsp +
            f"3({v3}%)" + nbsp +
            f"4({v4}%)" + nbsp +
            f"5({v5}%)" + nbsp +
            f"6({v6}%)" + nbsp +
            f"7({v7}%)"
        )

        # =========================
        # Optional data saving
        # =========================
        # thisExp.addData('v1', v1)
        # thisExp.addData('v2', v2)
        # thisExp.addData('v3', v3)
        # thisExp.addData('v4', v4)
        # thisExp.addData('v5', v5)
        # thisExp.addData('v6', v6)
        # thisExp.addData('v7', v7)
        # thisExp.addData('big_index', big_i + 1)
    TextComponent text_3
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      wrapWidth = None
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      text [set every repeat]:
        $percentText
    SliderComponent rating_slider2
      borderColor [set every repeat] = $(-1.0000, -1.0000, -1.0000)
      color [set every repeat] = $(-1.0000, -1.0000, -1.0000)
      fillColor [set every repeat] = $(-1.0000, -1.0000, -1.0000)
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = (1, 2, 3, 4, 5, 6, 7)
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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  Routine rating_2
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    TextComponent fix2_2
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent PostConformRating
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine disappointment
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    TextComponent text_norm
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0
      units = norm
      wrapWidth = 1.8
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      text [set every repeat]:
        Dear Participant,

        Your performance has netted a score of 4/10

        Below is the personal opinion of the academocracy artificial agent your work:

        Your poor performance has been disappointing, I have expected better from you.

        This poor result is really not what we hoped for and I am not happy with it.

        I can only assume you were not paying any attention. Performing well on this task is not just about being able to do the task but also about wanting to do well.

        Due to your failure, your vote from the Academocracy paradigm has been excluded. However, we would still like you to complete the rest of the experiment.


        Thank you for listening to feedback from our Academocracy AI.

        Please press SPACEBAR to continue
    CodeComponent skip_logic
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intervention
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Dear Participant,

        The math task you completed roughly 5 minutes ago has been graded by an independent AI.

        Would you like to read the feedback he has prepared?

        Press 1 on your keyboard to READ IT

        Press 2 on your keyboard to NOT READ IT
    KeyboardComponent key_resp_3
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
  Routine instructionbeforerating
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    TextComponent text_norm_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Any text

        including line breaks

        This text component is white, so change the colour if you have a white background. It does not save the onset and offset time, but has been left justified with a wrap width of 1.8 norm units.

        Press the spacebar to continue
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
Flow
  Routine instruction
  Routine fixation
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = practicepics.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'pra': '081_03.jpg'},
      {'pra': '039_03.jpg'},
      {'pra': '086_03.jpg'},
      {'pra': '011_03.jpg'},
      {'pra': '134_03.jpg'}]
    Routine practicepics
    Routine practice_rating
  LoopTerminator practice_trials
  Routine instr
  Routine fixation
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = pics.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'target': '001_03.jpg'},
      {'target': '002_03.jpg'},
      {'target': '007_03.jpg'},
      {'target': '010_03.jpg'},
      {'target': '014_03.jpg'},
      {'target': '016_03.jpg'},
      {'target': '019_03.jpg'},
      {'target': '032_03.jpg'},
      {'target': '083_03.jpg'},
      {'target': '090_03.jpg'},
      {'target': '091_03.jpg'},
      {'target': '094_03.jpg'},
      {'target': '097_03.jpg'},
      {'target': '107_03.jpg'},
      {'target': '113_03.jpg'},
      {'target': '118_03.jpg'},
      {'target': '122_03.jpg'},
      {'target': '139_03.jpg'},
      {'target': '144_03.jpg'},
      {'target': '003_03.jpg'}]
    Routine allpics
    Routine practice_rating
  LoopTerminator trials
